# b:Ts/UseQt                             = "True"
b:Gr/Enable                          = "False"                # CHANGE
i:Ts/SequenceVerbosity                  = 1
b:Ts/ShowCPUTime                        = "True"

includeFile = inserts.txt
includeFile = GOS_detector.txt
includeFile = Ma_CuGOS.txt
includeFile = Ma_Catphan_404.txt


# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = -1

sv:Ph/Default/LayeredMassGeometryWorlds = 1 "Inserts"

s:Ge/World/Material                    = "Vacuum"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m

s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "GOS_Glue"

u:So/Example/BeamEnergySpread          = 0.001

s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffX       = 0.160793105 rad
dc:So/Example/BeamAngularCutoffY       = 0.160793105 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 100000000

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m
i:Ts/ShowHistoryCountAtInterval        = 100000

s:Sc/Readout_gos_ebin/Component = "GOS_Glue"
s:Sc/Readout_gos_ebin/Quantity = "EnergyDeposit"
s:Sc/Readout_gos_ebin/OutputType = "csv"
# i:Sc/Readout_gos4/BounceLimit = 400000000 
s:Sc/Readout_gos_ebin/SplitByTimeFeature        = "beam_energy"
s:Sc/Readout_gos_ebin/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/Readout_gos_ebin/XBins = 128
i:Sc/Readout_gos_ebin/YBins = 512
i:Sc/Readout_gos_ebin/EBins = 20 # defaults to 1, that is, un-binned
d:Sc/Readout_gos_ebin/EBinMin = 0. MeV # defaults to zero
d:Sc/Readout_gos_ebin/EBinMax = 6. MeV # must be specified if EBins is greater than 1
i:Ts/seed = 37128


# s:Ge/ScoringCylinder/Type              = "TsCylinder"
# s:Ge/ScoringCylinder/Parent            = "World"
# s:Ge/ScoringCylinder/Material          = "G4_WATER"
# dc:Ge/ScoringCylinder/RMin             = 0. cm
# dc:Ge/ScoringCylinder/RMax             = 10. cm
# dc:Ge/ScoringCylinder/HL               = 10. cm
# dc:Ge/ScoringCylinder/SPhi             = 0. deg
# dc:Ge/ScoringCylinder/DPhi             = 360. deg
# dc:Ge/ScoringCylinder/RotX             = 0. deg
# dc:Ge/ScoringCylinder/RotY             = 90. deg
# dc:Ge/ScoringCylinder/RotZ             = 0. deg

# W_spectrum_6.txt
# s:So/Example/BeamEnergySpectrumType       = "Continuous"
# dv:So/Example/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 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5.985 MeV
# uv:So/Example/BeamEnergySpectrumWeights = 200 2.2262865210080333e-05 7.51092193361817e-05 0.00020166596944515869 0.0009358167568905561 0.001548357963127378 0.0014901719949593573 0.0017952322815272112 0.0027990385706452986 0.00498287323864255 0.007984458284023537 0.010987253645955082 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3.9852698218460666e-05

d:Tf/TimelineEnd                       = 19. ms
i:Tf/NumberOfSequentialTimes           = 18
s:Tf/beam_energy/Function              = "Step"
dv:Tf/beam_energy/Times                = 18 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 ms
dv:Tf/beam_energy/Values               = 18 10 20 30 40 50 60 70 80 90 100 300 500 700 900 1000 2000 4000 6000 keV
